PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent prime_text
      letterHeight = 0.05
      pos = (0,0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $prime
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    TextComponent fragment_text
      letterHeight = 0.05
      startVal [time (s)] = $delay
      text [set every repeat] = $target_fragment
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    MouseComponent mouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = Click here to sumit
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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  Routine instuctions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In each trial you would first see a whole word (the prime), followed shortly by a partially completed word (the fragment). Your task is to correctly complete the fragment into a meaningful English word, using the prime as a potential contextual cue.

        Press space to begin the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for participating
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Flow
  Routine instuctions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/varadadaftary/Downloads/Word priming conditions file (solo project) - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('prime_type', 'related '), ('prime', 'hospital '), ('target_full', 'doctor'), ('target_fragment', 'd__t_r'), ('SOA', np.float64(0.1)), ('correct_response', 'doctor '), ('delay', np.float64(0.6))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'library '), ('target_full', 'books '), ('target_fragment', 'b__k_'), ('SOA', np.float64(0.4)), ('correct_response', 'books '), ('delay', np.float64(0.9))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'classroom '), ('target_full', 'benches '), ('target_fragment', 'b_n__es'), ('SOA', np.float64(0.1)), ('correct_response', 'benches'), ('delay', np.float64(0.6))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'school '), ('target_full', 'students '), ('target_fragment', 's__d__t_'), ('SOA', np.float64(0.4)), ('correct_response', 'students'), ('delay', np.float64(0.9))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'playground '), ('target_full', 'slides '), ('target_fragment', 's_i_e_'), ('SOA', np.float64(0.1)), ('correct_response', 'slides'), ('delay', np.float64(0.6))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'washroom'), ('target_full', 'shower'), ('target_fragment', 's_o_e_'), ('SOA', np.float64(0.4)), ('correct_response', 'shower'), ('delay', np.float64(0.9))]),
      OrderedDict([('prime_type', 'related '), ('prime', 'jungle'), ('target_full', 'animal'), ('target_fragment', 'a__m_l'), ('SOA', np.float64(0.1)), ('correct_response', 'animal'), ('delay', np.float64(0.6))])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
    Routine trial
  LoopTerminator trials
  Routine Thank_you
