PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $Colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $Correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = Hello
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  Routine Thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      text = Thank you
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/varadadaftary/Downloads/Stroop effect condition file .xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Word': 'RED', 'Colour': 'red', 'Stim_condition': 'C', 'Correct_resp': 'r'},
      {'Word': 'RED', 'Colour': 'blue', 'Stim_condition': 'I', 'Correct_resp': 'b'},
      {'Word': 'BLUE', 'Colour': 'red', 'Stim_condition': 'I', 'Correct_resp': 'r'},
      {'Word': 'BLUE', 'Colour': 'blue', 'Stim_condition': 'C', 'Correct_resp': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine Thanks
